/**
  * Wound Healing Tool
  * Collaborators: 
  *     Nathalie Cahuzac, CNRS, IGMM, SPLICOS THERAPEUTICS; 
  *     Virginie Georget, MRI-CRBM
  *
  * Measure the area of a wound in a cellular tissue on a stack 
  * of images representing a time-series
  *
  * (c) 2010-2017, INSERM
  * written by Volker Baecker at Montpellier RIO Imaging (www.mri.cnrs.fr)
  *
*/


var helpURL = "https://github.com/MontpellierRessourcesImagerie/imagej_macros_and_scripts/wiki/Wound-Healing-Tool"
var varianceFilterRadius = 10;
var threshold = 50;
var radiusOpen = 4;
var minSize = 10000;
var methods = newArray("variance", "find edges");
var method = "variance";
var measureInPixelUnits = false;

//runTests();
for (i=0; i<100; i++) {
    runTests();
}
exit

macro "Unused Tool - C037" { }

macro "MRI Wound Healing Tool Help Action Tool - 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"{
    run('URL...', 'url='+helpURL);
}

macro 'Measure Wound Healing Action Tool - C000T4b12m' {
	measureActiveImage();
}

macro 'Batch Measure Wound Healing Action Tool - C000T4b12b' {
	batchMeasureImages();
}

macro 'Measure Wound Healing Action Tool Options' {
     Dialog.create("Wound Healing Tool Options");
     Dialog.addChoice("method", methods, method);
     Dialog.addNumber("variance filter radius", varianceFilterRadius);
     Dialog.addNumber("threshold", threshold);
     Dialog.addNumber("radius open", radiusOpen);
     Dialog.addNumber("min. size", minSize);
     Dialog.addCheckbox("ignore spatial calibration", measureInPixelUnits);
     Dialog.show();
     
     method = Dialog.getChoice();
     varianceFilterRadius= Dialog.getNumber();
     threshold= Dialog.getNumber();
     radiusOpen = Dialog.getNumber();
     minSize = Dialog.getNumber();
     measureInPixelUnits = Dialog.getCheckbox();
}

function batchMeasureImages() {
	print("\\Clear");
	setBatchMode(true);
	getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);
	print(dayOfMonth + "-" + (month+1) + "-" + year + " " + hour + ":" + minute + ":" + second + "." + msec);
	dir = getDirectory("Select the folder containing the images");
	files = getFileList(dir);
	numberOfImages = 0;
	for (i=0; i<files.length; i++) {
		file = files[i];
		if (isInputImage(file)) {
			numberOfImages++;
		}
	}
	counter = 1;
	for (i=0; i<files.length; i++) {
		file = files[i];
		if (isInputImage(file)) {
			print("\\Update1:Processing file " + (counter) + " of " + numberOfImages);
			open(dir+"/"+file);
			title = getTitle();
			measureActiveImage();
			outDir = dir + "/" + "control-images";
			if (!File.exists(outDir)) {
				File.makeDirectory(outDir);
			}
			save(outDir + "/" + title);
			close();
			selectWindow("Results");
			saveAs("Text", dir + "/scratch_areas_" + title + ".xls");
			counter++;
		}
	}
	print("FINISHED");
    getDateAndTime(year, month, dayOfWeek, dayOfMonth, hour, minute, second, msec);	
	print(dayOfMonth + "-" + (month+1) + "-" + year + " " + hour + ":" + minute + ":" + second + "." + msec);
	setBatchMode("exit and display");	
}


function measureActiveImage() {
	run("Select None");
	if (measureInPixelUnits)
    	run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
	getPixelSize(unit, pixelWidth, pixelHeight);
	run("Duplicate...", "duplicate");
    setForegroundColor(0, 0, 0);
    setBackgroundColor(255, 255, 255);
    roiManager("reset")
    roiManager("Associate", "true");
    if (method=="variance") 
        thresholdVariance();
    else 
        thresholdFindEdges();
    run("Convert to Mask", " black");
    resetThreshold();
    run("Invert", "stack");
    for (i=0; i<radiusOpen; i++) {
        run("Dilate", "stack");
    }
    for (i=0; i<radiusOpen; i++) {
        run("Erode", "stack");
    }
    run("Select All");
    run("Enlarge...", "enlarge=-" + radiusOpen + " pixel");
    run("Invert", "stack");
    run("Analyze Particles...", "size="+minSize+"-Infinity circularity=0.00-1.00 show=Nothing add stack");
    close();
    run("Clear Results");
    roiManager("Measure"); 
    roiManager("Show None");
	roiManager("Show All");
}

function isInputImage(name) {
	if (!endsWith(name, ".tif") && !endsWith(name, ".TIF")) return false;
	return true;
}

function thresholdVariance() {
    run("Variance...", "radius=" + varianceFilterRadius + " stack");
    run("8-bit");
    setThreshold(0,threshold);
}

function thresholdFindEdges() {
    run("Find Edges", "stack");
    run("Invert", "stack");
    if (bitDepth==24) run("8-bit");
    setAutoThreshold("Percentile dark");
}

function runTests() {
    print("STARTING TESTS...");
    print("testIsInputImage", testIsInputImage());
    print("testThresholdVariance", testThresholdVariance());
    print("testThresholdFindEdges", testThresholdFindEdges());
    print("testMeasureActiveImageVariance", testMeasureActiveImageVariance());
    print("testMeasureActiveImageFindEdges", testMeasureActiveImageFindEdges());
    print("FINISHED TESTS");
}

function testIsInputImage() {
    image1 = "test.tif";
    result = isInputImage(image1);
    image2 = "test.TIF";
    result = result && isInputImage(image2);
    image3 = "test.png";
    result = result && !isInputImage(image3);
    return result;
}

function testThresholdVariance() {
    setBatchMode(true);
    varianceFilterRadius = 1;
    newImage("Untitled", "8-bit ramp", 16, 16, 1);
    setBatchMode(true);
    thresholdVariance();
    getThreshold(lower, upper);
    variance0x0 = getPixel(0, 0);
    variance7x7 = getPixel(7, 7);
    variance15x15 = getPixel(15, 15);
    result = (upper==threshold);
    result = result && (variance0x0==57);
    result = result && (variance7x7==171);
    result = result && (variance15x15==57);
    close();
    setBatchMode(false);
    return result;
}

function testThresholdFindEdges() {
    setBatchMode(true);
    newImage("Untitled", "8-bit ramp", 16, 16, 1);
    thresholdFindEdges();
    getThreshold(lower, upper);
    variance0x0 = getPixel(0, 0);
    variance7x7 = getPixel(7, 7);
    variance15x15 = getPixel(15, 15);
    result = (lower==128);
    result = result && (variance0x0==191);
    result = result && (variance7x7==127);
    result = result && (variance15x15==191);
    close();
    setBatchMode(false);
    return result;    
}

function testMeasureActiveImageVariance() {
    setBatchMode(true);
    createTestImage();
    method = "variance";
    varianceFilterRadius = 1;
    threshold = 1;
    radiusOpen = 1;
    minSize = 50;
    measureActiveImage();
    roiManager("Select", 0);
    getSelectionBounds(x, y, width, height);
    close();
    result = (x==5);
    result = result && (y==1);
    result = result && (width==7);
    result = result && (height==14);
    setBatchMode(false);
    roiManager("reset");
    return result;
}

function testMeasureActiveImageFindEdges() {
    setBatchMode(true);
    createTestImage();
    method = "find edges";
    threshold = 1;
    radiusOpen = 1;
    minSize = 50;
    measureActiveImage();
    roiManager("Select", 0);
    getSelectionBounds(x, y, width, height);
    close();
    result = true;
    result = result && (y==1);
    result = result && (height==14);
    setBatchMode(false);
    roiManager("reset");
    return result;
}

function createTestImage() {
    newImage("Untitled", "8-bit black", 16, 16, 1);
    makeRectangle(0, 0, 4, 16);
    run("Add Noise");
    makeRectangle(13, 0, 3, 16);
    run("Add Noise");
    run("Select None");
}
